PsychoPy2experiment version="3.0.0b11"
Settings
  Data filename = 'data/%s'%(expInfo['participant'])
  Experiment info = {'participant': '001', 'dominant eye': "'left'"}
  Force stereo = False
  Full-screen window = False
  Monitor = VIEWPixx
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $[-0.122,-0.122,-0.122]
  expName = _psychopy
  exportHTML = manually
  logging level = warning
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Routines
  Routine instructions
    TextComponent instructions_text
      color = $[1, 1, 1]
      font = Calibri
      letterHeight = 50
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 800
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      text:
        Stay fixated on the central white dot and ignore the word itself. To respond press:
         - Left for red LETTERS
         - Down for green LETTERS
         - Right for blue LETTERS

        Press SPACE to continue.
    KeyboardComponent instructions_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine finished
    TextComponent finished_text
      color = $[1, 1, 1]
      font = Calibri
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
      wrapWidth = 800
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      text:
        This is the end of the experiment. Thanks!

        Press SPACE to exit.
    KeyboardComponent finished_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task
    TextComponent stimulus_text
      color [set every repeat] = $stimColor
      font = Calibri
      letterHeight = 100
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimText
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    GratingComponent fixation
      mask = circle
      opacity = .7
      sf = 40
      size = [16,16]
      startVal [time (s)] = 0
      tex = sin
      units = pix
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    GratingComponent gaze_cursor
      color = $[0.004,0.004,1.000]
      mask = circle
      opacity [set every frame] = 1
      pos [set every frame] = [0,0]
      sf = 40
      size [set every frame] = (30,30)
      startVal [time (s)] = 0.0
      tex = sin
      units = pix
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    KeyboardComponent stimulus_keyboard
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    CodeComponent stimulus_code
      Code Type = Py
      Begin Routine:
        # Start recording. This should be run at the start of the trial.
        # Note: There is an intentional delay of 150 msec to allow the Eyelink to buffer gaze samples.
        eyetracking.start_recording(trial=trials.thisN, block=block.thisN)

        # Send messages to Eyelink. This allows post-hoc processing of timing related events (i.e. "stimulus onset").
        # Sending message "stimulus onset".
        msg = "stimulus onset"
        eyetracking.send_message(msg=msg)
      Each Frame:
        #if eyetracker:
        #    # check for 'g' key press to toggle gaze cursor visibility
        #    if iokeyboard.getPresses(keys=['g',]):
        #        display_gaze=not display_gaze
        #
        #    # get /eye tracker gaze/ position
        #    gpos=eyetracker.getPosition()
        #    if type(gpos) in [list,tuple]:
        #        x,y=gpos[0], gpos[1]
        #        d=np.sqrt(x**2+y**2)
        #        if d>maintain_fix_pix_boundary:
        #            heldFixation = False #unless otherwise
      End Experiment:
        # Finish recording
        eyetracking.finish_recording()
      End Routine:
        # Send messages to Eyelink. This allows post-hoc processing of timing related events (i.e. "stimulus onset").
        # Sending message "stimulus offset".
        msg = "stimulus offset"
        eyetracking.send_message(msg=msg)
        # Prepare variables to be sent to Eyelink
        variables = dict(color=stimColor, text=stimText, isCongruent=congruent, response=stimulus_keyboard.keys, correct=corrAns)
        # Stop recording
        eyetracking.stop_recording(trial=trials.thisN, block=block.thisN, variables=variables)
  Routine calibration
    CodeComponent calibration_code
      Code Type = Py
      Begin Routine:
        import imhr
        root = Path(imhr.__file__).parent

        # get parameters from PsychoPy
        subject = expInfo['participant']
        dominant_eye = expInfo['dominant eye']

        # Initialize the Eyelink.r
        eyetracking = imhr.eyetracking.Eyelink(window=win, libraries=True, subject=subject,
        timer=routineTimer, demo=True)


        # Connect to the Eyelink Host.
        param = eyetracking.connect(calibration_type=13)

        # Set the dominant eye
        eye_used = eyetracking.set_eye_used(eye=dominant_eye)

        # Start calibration.
        calibration = eyetracking.calibration()
  Routine drift_correction
    GratingComponent drift_fixation
      mask = circle
      opacity = .7
      sf = 40
      size = [16,16]
      startVal [time (s)] = 0
      tex = sin
      units = pix
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    CodeComponent drift_code
      Code Type = Py
      Begin Routine:
        # drift correction
        eyetracking.drift_correction()
Flow
  Routine calibration
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine drift_correction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trialTypes.xlsx
      endPoints = [1, 2]
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('stimText', 'red'), ('stimColor', 'red'), ('corrAns', 'left'), ('congruent', 1)]),
        OrderedDict([('stimText', 'red'), ('stimColor', 'green'), ('corrAns', 'down'), ('congruent', 0)]),
        OrderedDict([('stimText', 'green'), ('stimColor', 'green'), ('corrAns', 'down'), ('congruent', 1)]),
        OrderedDict([('stimText', 'green'), ('stimColor', 'blue'), ('corrAns', 'right'), ('congruent', 0)]),
        OrderedDict([('stimText', 'blue'), ('stimColor', 'blue'), ('corrAns', 'right'), ('congruent', 1)]),
        OrderedDict([('stimText', 'blue'), ('stimColor', 'red'), ('corrAns', 'left'), ('congruent', 0)])]
      Routine task
    LoopTerminator trials
  LoopTerminator block
  Routine finished
