PsychoPy2experiment version="1.83.04"
Settings
  Data filename = 'data/csv/%s_%s' %(expInfo['Participant'],expName,)
  Monitor = Experiment
  color = $[-0.137,-0.137,-0.137]
  Window size (pixels) = [1920, 1080]
  Full-screen window = False
  Experiment info = {u'Participant': u'001'}
  expName = CGP
  logging level = debug
  Units = pix
  Screen = 1
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Routines
  Routine Finish
    ImageComponent End_Screen
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image = $"Instructions/finished.png"
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  Routine Fixation
    CodeComponent trial_drift_code
      Begin Routine:
        eyelink.start_recording()
      Each Frame:
        eyelink.gc_window()
    ImageComponent fixation_cross
      stopVal [duration (s)] = DURATION
      startVal [time (s)] = 0.0
      image = $"Instructions/fixation.png"
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  Routine Block_event
    ImageComponent composite_display
      stopVal [time (s)] = 5
      startVal [time (s)] = 0
      image [set every repeat] = $"instructions/"+block_event+".png"
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  Routine IAPS
    CodeComponent trial_record_code
      End Routine:
        #EyeLink-4 End Trial
        #creating csv file for gaze info
        #gaze_csv = _thisDir + os.sep + 'data/gaze/' + edfsubject + '.csv'
        #with open(gaze_csv, "w") as output:
        #    writer = csv.writer(output, lineterminator='\n')
        #    for val in gaze:
        #        writer.writerow([val])
        #end of trial message
        tracker.send_message('Ending Recording')


        #The IMGLOAD command is used to show an overlay image in Data Viewer.  This will code the time that the PictureTrial image should appear.
        pylink.getEYELINK().sendMessage("!V IMGLOAD CENTER  %s" %(scenestim))

        #IAPS
        # Send onset time
        offset = int((t-iaps_display.tStart) * 1000)
        msg = str(offset) + " IAPS_Onset"
        pylink.getEYELINK().sendMessage(msg)

        #IAPS
        # Send offset time
        offset = int((t-blank.tStart) * 1000)
        msg = str(offset) + " IAPS_Offset"
        pylink.getEYELINK().sendMessage(msg)

        #Waits 50ms to allow eyelink to prepare
        clock.wait(.05)
        #stop recording
        pylink.getEYELINK().stopRecording()

        #VARIABLES
        msg = "!V TRIAL_VAR picture %s" %(scenestim) #scenestim
        pylink.getEYELINK().sendMessage(msg)
        msg = "!V TRIAL_VAR valence %s" %(valence) #valence
        pylink.getEYELINK().sendMessage(msg)
        msg = "!V TRIAL_VAR valmean %s" %(valmean) #valmean
        pylink.getEYELINK().sendMessage(msg)
        msg = "!V TRIAL_VAR arousal %s" %(arousal) #arousal
        pylink.getEYELINK().sendMessage(msg)
        msg = "!V TRIAL_VAR arousalmean %s" %(arousalmean) #arousalmean
        pylink.getEYELINK().sendMessage(msg)
        msg = "!V TRIAL_VAR BlockVar %s" %(blocknum) #blocknum
        pylink.getEYELINK().sendMessage(msg)
        msg = "!V TRIAL_VAR outlier %s" %(outliers) #outliers
        pylink.getEYELINK().sendMessage(msg)

        #TRIAL RESULTS
        pylink.getEYELINK().sendMessage("TRIAL_RESULT 1")
    ImageComponent iaps_display
      stopVal [time (s)] = 5
      startVal [time (s)] = 0
      image [set every repeat] = $"stimulus/"+scenestim
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    ImageComponent blank
      stopVal [time (s)] = 7
      startVal [time (s)] = 5
      image = $"Instructions/blank.png"
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  Routine Break
    KeyboardComponent Break_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent break_image
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/"+break_display+".png"
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    CodeComponent Break_End
      Begin Experiment:
        Break_end = 0
      Begin Routine:
        if Break_end > 3:
            Break_loop.finished = True
  Routine Calibration_Verification
    CodeComponent cal_code
      Begin Experiment:
        import pylink
        from _script import eyelink_device
        from psychopy import clock
        from win32api import GetSystemMetrics
        import csv
        import time

        #constants
        trialNum = 0

        #screen
        w = GetSystemMetrics(0)
        h = GetSystemMetrics(1)

        #bounding box
        cbox = 200 #
        cl = (w - cbox)/2 #left bound
        ct = (h - cbox)/2 #top bound
        cr = (w + cbox)/2 #right bound
        cb = (h + cbox)/2 #bottom bound

        #find out which eye
        left_eye = 0
        right_eye = 1
        binocular = 2

        gaze = []
        DURATION = 2 #2 seconds (with time.clock())
        GCWINDOW = .5
        inbox = False
        fixdone = False
        FixationEndTime = -1
        Entertime = -1
        endtime = -1
        currenttime = -1

        class eyelink:
            def start_recording(self):
                global eye_used
                pylink.getEYELINK().sendMessage('TRIALID %s'%(trialNum))
                pylink.getEYELINK().sendCommand("record_status_message 'trial %s image %s'" %(trialNum,scenestim))
                pylink.getEYELINK().sendCommand("set_idle_mode")
                pylink.getEYELINK().sendCommand("clear_screen 0")

                pylink.getEYELINK().sendCommand("draw_box %s %s %s %s %s" %(w/2 - 100, h/2 - 100, w/2 + 100, h/2 + 100,  7))

                # Begin recording
                pylink.getEYELINK().startRecording(1, 1, 1, 1)
                dt = pylink.getEYELINK().getNewestSample() # check for new sample update
                eye_used = pylink.getEYELINK().eyeAvailable() #determine which eye(s) are available

            def gc_window(self):
                #TODO: fix
                global fixdone
                global inbox
                global FixationEndTime
                global Entertime
                #global endtime
                #global currenttime
                stime = time.clock()
                #while fixdone == False and (time.clock() < stime + DURATION):
                #check for new sample update
                dt = pylink.getEYELINK().getNewestSample() # check for new sample update
                if(dt != None):
                    # Gets the gaze position of the latest sample,
                    if eye_used == right_eye:
                        gx,gy = dt.getRightEye().getGaze()
                    elif eye_used == left_eye:
                        gx,gy = dt.getLeftEye().getGaze()
                    else:
                        gx,gy = (-1,-1)

                    gaze.append((gx,gy))

                #check if within fixation location
                if inbox == False and \
                gx > cl and gx < cr and\
                gy > ct and gy < cb and\
                Entertime < 0:
                    Entertime = time.clock()
                    inbox = True
                    pylink.getEYELINK().sendMessage('WindowOnset')
                    #pylink.getEYELINK().sendMessage('x %s y %s left %s right %s up %s down %s'%(gaze_position[0],gaze_position[1],left_box,right_box,bottom_box,top_box))
                else:
                    # Reset clock if not in box
                    Entertime = -1
                    inbox = False

                Currenttime = time.clock()
                #if fixating within box, check the time entered vs the duration
                if not Entertime < 0 and inbox == True:
                    endtime = (Entertime + GCWINDOW)
                    if Currenttime >= endtime:
                        fixdone = True
                        FixationEndTime = time.clock()
                        pylink.getEYELINK().sendMessage('WindowOffset')
                        #wait rest of duration
                        #sleeptime = (stime + DURATION) - FixationEndTime
                        #clock.wait(sleeptime)
                        continueRoutine = False
                else:
                    fixdone = False

        eyelink = eyelink()
      Begin Routine:
        #EyeLink-1 Initize
        edfsubject = (expInfo['Participant'])
        # Initiate eye-tracker link and open EDF
        tracker = eyelink_device.Connect(win, edfsubject)
        # Calibrate eye-tracker
        tracker.calibrate()
      End Experiment:
        #EyeLink-4 Close
        #set offline mode so we can transfer file
        edfpath = _thisDir + os.sep + 'data/edf'
        tracker.end_experiment(edfpath)
  Routine Block_Instructions
    KeyboardComponent block_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent Block_image
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/"+block_display+".png"
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Flow
  Routine Calibration_Verification
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = procedure\#set_list.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_event': u'comp_1', 'break_display': u'break', 'block_display': u'inst_2', 'block_file': u'procedure\\0.csv', 'order': 0},
      {'block_event': u'comp_2', 'break_display': u'break', 'block_display': u'cont_inst', 'block_file': u'procedure\\1.csv', 'order': 1},
      {'block_event': u'comp_3', 'break_display': u'blank', 'block_display': u'cont_inst', 'block_file': u'procedure\\2.csv', 'order': 2}]
    Routine Block_Instructions
    Routine Block_event
    LoopInitiator Trial_Loop loopType="TrialHandler"
      conditionsFile = $block_file
      loopType = random
      nReps = 1
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      Routine Fixation
      Routine IAPS
    LoopTerminator Trial_Loop
    LoopInitiator Break_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Break
    LoopTerminator Break_loop
  LoopTerminator block_loop
  Routine Finish
