PsychoPy2experiment version="1.85.1"
Settings
  Monitor = Experiment
  color = $[1.000,1.000,1.000]
  Experiment info = {u'session': u'001', u'participant': u'001'}
  Units = norm
  Window size (pixels) = [1366, 768]
  Full-screen window = False
  Use version = 1.85.1
  Save log file = False
  Data filename = 'data/%s_%s' %(expInfo['participant'],expInfo['session'])
  expName = SART
  Screen = 1
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Routines
  Routine Task_Instructions
    ImageComponent Practice_instructions_2
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/practice_end.png"
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    KeyboardComponent Prac__key_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Finish
    ImageComponent End_Screen
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = $"Instructions/Finished.png"
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  Routine Introduction
    ImageComponent task_instr_image
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/"+Introduction_image
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    KeyboardComponent Inst__Key
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent task_code
      Begin Experiment:
        #intro block
        intro_slide = [{'Introduction_image': u'Introduction_1.png'}, {'Introduction_image': u'Introduction_2.png'},\
         {'Introduction_image': u'Introduction_3.png'}]

        #practice block
        practice_slide = [{'Practice_image': u'practice_start.png'}, {'Practice_image': u'outdoor.png'}]
        practice_block = [{'nontarget': u'male_neutral_046', 'target': u'outdoor_046', 'order': 1}, {'nontarget': u'male_neutral_047', 'target': u'outdoor_047', 'order': 1}, {'nontarget': u'male_neutral_048', 'target': u'outdoor_048', 'order': 1}, {'nontarget': u'male_neutral_049', 'target': u'outdoor_049', 'order': 1}, {'nontarget': u'male_neutral_050', 'target': u'outdoor_050', 'order': 1}, {'nontarget': u'female_neutral_046', 'target': u'outdoor_051', 'order': 1}, {'nontarget': u'female_neutral_047', 'target': u'outdoor_052', 'order': 1}, {'nontarget': u'female_neutral_048', 'target': u'outdoor_053', 'order': 1}, {'nontarget': u'female_neutral_049', 'target': u'outdoor_054', 'order': 1}, {'nontarget': u'female_neutral_050', 'target': u'outdoor_055', 'order': 1}]


        #-------------generating stimuli
        import copy
        import csv
        import itertools

        participant = expInfo['participant']

        #create both target and lure for gender
        gender_0 = ['male','female']
        np.random.shuffle(gender_0)
        gender_t = gender_0[-len(gender_0)]
        gender_l = gender_0[1]

        #create both target and lure for scene
        scene_0 = ['indoor','outdoor']
        np.random.shuffle(scene_0)
        scene_t = scene_0[-len(scene_0)]
        scene_l = scene_0[1]


        #-------------------#neutral-only blocks------------------------------------------
        #running iteration for attended stimuli
        #target and lure
        target_aN = "%s_neutral %s_neutral %s_neutral %s_neutral %s %s %s %s" %(gender_t,gender_t,gender_t,gender_t,scene_t,scene_t,scene_t,scene_t)
        lure_aN = "%s_neutral %s_neutral %s_neutral %s_neutral %s %s %s %s" %(gender_l,gender_l,gender_l,gender_l,scene_l,scene_l,scene_l,scene_l)
        target_aN = target_aN.split() #creating list
        lure_aN = lure_aN.split() #combining lists
        block_attendedN = zip(target_aN,lure_aN) #combining lists

        #running iteration for attended stimuli
        target_uN = "%s %s %s %s %s_neutral %s_neutral %s_neutral %s_neutral" %(scene_t,scene_t,scene_t,scene_t,gender_t,gender_t,gender_t,gender_t)
        lure_uN = "%s %s %s %s %s_neutral %s_neutral %s_neutral %s_neutral" %(scene_l,scene_l,scene_l,scene_l,gender_l,gender_l,gender_l,gender_l)
        target_uN = target_uN.split() #creating lists
        lure_uN = lure_uN.split() #creating lists
        block_unattendedN = zip(target_uN,lure_uN) #combining lists

        #generating list of blocks
        ##combining attended and unattended lists
        attended_unattended_blockN = zip(block_attendedN, block_unattendedN)


        #-------------------#neutral-sad blocks------------------------------------------
        #running iteration for attended stimuli
        #target and lure
        target_aNS = "%s_sad %s_sad %s_neutral %s_neutral %s %s %s %s" %(gender_t,gender_t,gender_t,gender_t,scene_t,scene_t,scene_t,scene_t)
        lure_aNS = "%s_sad %s_sad %s_neutral %s_neutral %s %s %s %s" %(gender_l,gender_l,gender_l,gender_l,scene_l,scene_l,scene_l,scene_l)
        target_aNS = target_aNS.split() #creating list
        lure_aNS = lure_aNS.split() #combining lists
        block_attendedNS = zip(target_aNS,lure_aNS) #combining lists

        #running iteration for attended stimuli
        target_uNS = "%s %s %s %s %s_sad %s_sad %s_neutral %s_neutral" %(scene_t,scene_t,scene_t,scene_t,gender_t,gender_t,gender_t,gender_t)
        lure_uNS = "%s %s %s %s %s_sad %s_sad %s_neutral %s_neutral" %(scene_l,scene_l,scene_l,scene_l,gender_l,gender_l,gender_l,gender_l)
        target_uNS = target_uNS.split() #creating lists
        lure_uNS = lure_uNS.split() #creating lists
        block_unattendedNS = zip(target_uNS,lure_uNS) #combining lists

        #generating list of blocks
        ##combining attended and unattended lists
        attended_unattended_blockNS = zip(block_attendedNS,block_unattendedNS)




        #task order
        ltaskOrder = [] #order of each subblock within a block
        ltaskType = [] #whether block will include combination of neutral and sad stimuli or just neutral
        for k in range(0,4):
            ltaskOrder_ = range(0,8)
            np.random.shuffle(ltaskOrder_)
            ltaskOrder.append(ltaskOrder_)
            ltaskType_ = ['neutral','neutral','sad','sad']
            np.random.shuffle(ltaskType_)
            ltaskType.append(ltaskType_)

        #generating lists
        lblocksNS = []
        ltrialsNS = []
        lblocksN = []
        ltrialsN = []
        dictSetN = []
        dictSetNS = []

        #generating neutral blocks
        p=0
        for j in range(0,2):
            ltrials_ = []
            lblocks_ = []
            dictBlock_ = []
            for k in range(0,8):
                #pulling first item from target_nontarget list
                #t_nt = target_nontarget1[-len(target_nontarget1)]
                t_nt = attended_unattended_blockN[k]

                #stripping target, nontarget data from each block
                t_ = [i[0] for i in t_nt]
                _nt = [i[1] for i in t_nt]

                #-------------------#attended target------------------------------------------
                #list of targets and non-targets, as well as lures for each target (t_list)
                target_comp = [t_[0]]
                aT_list = list(range(1,46))
                formatter = '{0:03d}'.format
                aT_list = map(formatter, aT_list)#leading zeros
                aT_list = ['{}_{}'.format(a, b) for b in aT_list for a in target_comp] #list comprehension

                #-------------------#attended lure------------------------------------------
                lure_comp = [_nt[0]]
                aL_list = list(range(1,46))
                aL_list = map(formatter, aL_list)#leading zeros
                np.random.shuffle(aL_list)
                aL_list = aL_list[:5]#first 5 items
                aL_list = ['{}_{}'.format(a, b) for b in aL_list for a in lure_comp] #list comprehension

                #combining attended target and lure
                attended = aT_list + aL_list #combining lists
                np.random.shuffle(attended)

                #-------------------#unattended target------------------------------------------
                ##list of nontargets and non-nontargets, as well as lures for each nontarget (n_list)
                nontarget_comp = [t_[1]]
                uT_list = list(range(1,46))
                formatter = '{0:03d}'.format
                uT_list = map(formatter, uT_list)#leading zeros
                np.random.shuffle(uT_list)
                uT_list = uT_list[:25]#first 5 items
                uT_list = ['{}_{}'.format(a, b) for b in uT_list for a in nontarget_comp] #list comprehension

                #-------------------#unattended lure------------------------------------------
                #nontarget_lure (nl_list)
                lure_comp = [_nt[1]]
                uL_list = list(range(1,46))
                formatter = '{0:03d}'.format
                uL_list = map(formatter, uL_list)#leading zeros
                np.random.shuffle(uL_list)
                uL_list = uL_list[:25]#first 5 items
                uL_list = ['{}_{}'.format(a, b) for b in uL_list for a in lure_comp] #list comprehension

                #combining unattended target and lure
                unattended = uT_list + uL_list #combining lists
                np.random.shuffle(unattended)

               #-------------------#create iterated list------------------------------------------
                t_ = t_[0] #first value of tuple pair
                t_block = t_.split('_', 1)[0]
                #lblocks_.append([k,t_,t_block]) #order, #target, #target type (indoor, male, female, outdoor)
                lblocks_.append(copy.deepcopy({"order":k,"target":t_,"face_scene":t_block}))
                ltrials_.append([attended,unattended])

                dictTrials_ = []
                dictEvent_ = {}
                for f in range(0,50):
                    dictEvent_ = {'#set':j, '#Block':k, 'type':'sad', 'nontarget':unattended[f], 'target':attended[f]}
                    dictTrials_.append(copy.deepcopy(dictEvent_))

                dictBlock_.append(copy.deepcopy(dictTrials_))

                #saving to csv
                #file variable
                if not os.path.exists("procedure\participant\%s\\n"%(participant)):
                    os.makedirs("procedure\participant\%s\\n"%(participant))

                f_name = 'procedure\participant\%s\\n\%s_%s.csv'%(participant,k,t_)

                #outputting set_list procedure
                with open('procedure\participant\%s\#set_list.csv'%(participant), 'a') as set_list:
                    writer = csv.writer(set_list,lineterminator='\n')
                    if j==0 and k==0:
                        header=["face_scene","target","set","block", "set_directory"]
                        writer.writerow(header)
                    writer.writerow([t_block,t_,j,k,f_name])

                #outputting block procedure
                with open('procedure\participant\%s\\n\%s_%s.csv'%(participant,k,t_), 'wb') as target_sch:
                    writer = csv.writer(target_sch)
                    header=["target","nontarget","order"]
                    writer.writerow(header)
                    for row,row1 in itertools.izip(attended,unattended):
                        writer.writerow([row,row1,k])

            #-------------------#appending block and trial values to lists------------------------------------------
            ltrialsN.append(ltrials_)
            lblocksN.append(lblocks_)
            dictSetN.append(copy.deepcopy(dictBlock_))


        #generating emotional blocks
        for j in range(2,4):
            ltrials_ = []
            lblocks_ = []
            dictBlock_ = []
            for k in range(0,8):
                #pulling first item from target_nontarget list
                #t_nt = target_nontarget1[-len(target_nontarget1)]
                t_nt = attended_unattended_blockNS[k]

                #stripping target, nontarget data from each block
                t_ = [i[0] for i in t_nt]
                _nt = [i[1] for i in t_nt]

                #-------------------#attended target------------------------------------------
                #list of targets and non-targets, as well as lures for each target (t_list)
                target_comp = [t_[0]]
                aT_list = list(range(1,46))
                formatter = '{0:03d}'.format
                aT_list = map(formatter, aT_list)#leading zeros
                aT_list = ['{}_{}'.format(a, b) for b in aT_list for a in target_comp] #list comprehension

                #-------------------#attended lure------------------------------------------
                lure_comp = [_nt[0]]
                aL_list = list(range(1,46))
                aL_list = map(formatter, aL_list)#leading zeros
                np.random.shuffle(aL_list)
                aL_list = aL_list[:5]#first 5 items
                aL_list = ['{}_{}'.format(a, b) for b in aL_list for a in lure_comp] #list comprehension

                #combining attended target and lure
                attended = aT_list + aL_list #combining lists
                np.random.shuffle(attended)

                #-------------------#unattended target------------------------------------------
                ##list of nontargets and non-nontargets, as well as lures for each nontarget (n_list)
                nontarget_comp = [t_[1]]
                uT_list = list(range(1,46))
                formatter = '{0:03d}'.format
                uT_list = map(formatter, uT_list)#leading zeros
                np.random.shuffle(uT_list)
                uT_list = uT_list[:25]#first 5 items
                uT_list = ['{}_{}'.format(a, b) for b in uT_list for a in nontarget_comp] #list comprehension

                #-------------------#unattended lure------------------------------------------
                #nontarget_lure (nl_list)
                lure_comp = [_nt[1]]
                uL_list = list(range(1,46))
                formatter = '{0:03d}'.format
                uL_list = map(formatter, uL_list)#leading zeros
                np.random.shuffle(uL_list)
                uL_list = uL_list[:25]#first 5 items
                uL_list = ['{}_{}'.format(a, b) for b in uL_list for a in lure_comp] #list comprehension

                #combining unattended target and lure
                unattended = uT_list + uL_list #combining lists
                np.random.shuffle(unattended)

               #-------------------#create iterated list------------------------------------------
                t_ = t_[0] #first value of tuple pair
                t_block = t_.split('_', 1)[0]
                #lblocks_.append([k,t_,t_block]) #order, #target, #target type (indoor, male, female, outdoor)
                lblocks_.append(copy.deepcopy({"order":k,"target":t_,"face_scene":t_block}))
                ltrials_.append([attended,unattended])

                dictTrials_ = []
                dictEvent_ = {}
                for f in range(0,50):
                    dictEvent_ = {'#set':j, '#Block':k, 'type':'sad', 'nontarget':unattended[f], 'target':attended[f]}
                    dictTrials_.append(copy.deepcopy(dictEvent_))

                dictBlock_.append(copy.deepcopy(dictTrials_))

                #saving to csv
                #file variable
                if not os.path.exists("procedure\participant\%s\s"%(participant)):
                    os.makedirs("procedure\participant\%s\s"%(participant))

                f_name = 'procedure\participant\%s\s\%s_%s.csv'%(participant,k,t_)

                #outputting set_list procedure
                with open('procedure\participant\%s\#set_list.csv'%(participant), 'a') as set_list:
                    writer = csv.writer(set_list,lineterminator='\n')
                    writer.writerow([t_block,t_,j,k,f_name])

                #outputting block procedure
                with open('procedure\participant\%s\s\%s_%s.csv'%(participant,k,t_), 'wb') as target_sch:
                    writer = csv.writer(target_sch)
                    header=["target","nontarget","order"]
                    writer.writerow(header)
                    for row,row1 in itertools.izip(attended,unattended):
                        writer.writerow([row,row1,k])

            #-------------------#appending block and trial values to lists------------------------------------------
            ltrialsNS.append(ltrials_)
            lblocksNS.append(lblocks_)
            dictSetNS.append(copy.deepcopy(dictBlock_))

        #-------------------------------------------------------------
        #-------------------------------------------------------------
        #-------------------#sum of all blocks, sum of all trials------------------------------------------
        lblocks = lblocksNS + lblocksN
        ltrials = ltrialsNS + ltrialsN
        dictTask = dictSetNS + dictSetN
        del attended_unattended_blockN, attended_unattended_blockNS, b, block_attendedN, block_attendedNS,\
        block_unattendedN, block_unattendedNS, formatter, gender_0, gender_l, gender_t, lblocksN, lblocksNS, dictSetN, dictSetNS,\
        lblocks_, ltrialsNS, ltrialsN, ltrials_, ltaskOrder_, ltaskType_, lure_aN, lure_aNS, lure_comp, lure_uN,\
        lure_uNS, aT_list, aL_list, nontarget_comp, scene_0, scene_l, scene_t, t_, t_block, uL_list, uT_list,\
        t_nt, target_aN, target_aNS, target_comp, target_uN, target_uNS, a, f, i, j, k, attended, unattended, dictBlock_, dictEvent_, dictTrials_
  Routine Stimuli
    CodeComponent image_display
      Begin Routine:
        #preparing image name ----------6/8/2017 SMR
        #if target is faces
        if Practice_image == "female.png" or Practice_image == "male.png":
            image_name = "stimuli/"+target+"_"+nontarget+".png"
        #else target is scenes
        else:
            image_name = "stimuli/"+nontarget+"_"+target+".png"

        print("target: "+target)
        print("nontarget: "+nontarget)
        print("image: "+image_name)
    KeyboardComponent stimuli_key
      storeCorrect = True
      stopVal [duration (s)] = 1
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      allowedKeys [set every repeat] = '1'
      startVal [time (s)] = 0
      store = first key
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    ImageComponent stim_display
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_name
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  Routine MRI_Fixation
    ImageComponent fixation_image_2
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/Fixation.png"
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    CodeComponent MRI_CODE
      Begin Experiment:
        #sending keyboard responses to mri
        import win32com.client
        shell = win32com.client.Dispatch("WScript.Shell")
      Begin Routine:
        #--------------------send mri trigger
        shell.SendKeys("5")
  Routine Break
    KeyboardComponent Break_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent break_display
      startVal [time (s)] = 0.0
      image = $"Instructions/Break.png"
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    CodeComponent BreakEnd_code
      Begin Experiment:
        Break_end = 0
      Begin Routine:
        if Break_end > 3:
            Break_loop.finished = True
  Routine Fixation
    ImageComponent fixation_image
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/Fixation.png"
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  Routine Block_Instructions
    ImageComponent Block_instr_image
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/"+face_scene+".png"
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    CodeComponent code
      Begin Routine:
        print("block: "+face_scene)
  Routine Practice_Instructions
    ImageComponent Practice_instructions
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Instructions/"+Practice_image
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    KeyboardComponent Prac__key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator Introduction_Loop loopType="TrialHandler"
    conditionsFile = procedure\Introduction_list.csv
    isTrials = False
    loopType = sequential
    nReps = 1
    conditions = [{'Introduction_image': u'introduction.png'}]
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    Routine Introduction
  LoopTerminator Introduction_Loop
  LoopInitiator Practice_intro_loop loopType="TrialHandler"
    conditionsFile = procedure\practice_list.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Introduction_image': u'practice_start.png'},
      {'Introduction_image': u'outdoor.png'}]
    Routine Practice_Instructions
  LoopTerminator Practice_intro_loop
  Routine Fixation
  LoopInitiator Practice_loop loopType="TrialHandler"
    conditionsFile = $practice_block
    loopType = random
    nReps = 1
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    Routine Stimuli
  LoopTerminator Practice_loop
  Routine Task_Instructions
  LoopInitiator Set_loop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine MRI_Fixation
    LoopInitiator Block_loop loopType="TrialHandler"
      conditionsFile = procedure\participant\%s\#set_list.csv
      loopType = random
      nReps = 1
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      Routine Block_Instructions
      Routine Fixation
      LoopInitiator Trial_Loop loopType="TrialHandler"
        conditionsFile = $block_file
        loopType = random
        nReps = 1
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        Routine Stimuli
      LoopTerminator Trial_Loop
    LoopTerminator Block_loop
    LoopInitiator Break_loop loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine Break
    LoopTerminator Break_loop
  LoopTerminator Set_loop
  Routine Finish
